CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your workspace, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{}
    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the images by matching files in the folder against the unique text pattern for each stain: D.TIF for DAPI, F.TIF for the FITC image, R.TIF for the rhodamine image. The three images together comprise an image set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Select the rule criteria:and (file does contain "000")
    Name to assign these images:PilotHaliteSlides
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:FileLocation

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:PilotHaliteSlides
    Name the output image:LightingMap
    Select how the illumination function is calculated:Background
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    Block size:150
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Convex Hull
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:PilotHaliteSlides
    Name the output image:Adjusted_Image
    Select the illumination function:LightingMap
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:PilotHaliteSlides
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):1,200
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:Background
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Method to calculate adaptive window size:Image size
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
MeasureObjectSizeShape:[module_num:8|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notes:['Measure morphological features from the cell, nuclei and cytoplasm objects.']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
    Select objects to measure:Cells
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:9|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notes:['Measure intensity features from nuclei and cell objects against the cropped DAPI image.']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
    Hidden:1
    Select an image to measure:Adjusted_Image
    Select objects to measure:Cells

MeasureTexture:[module_num:10|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notes:['Measure texture features of the nuclei, cells and cytoplasm from the cropped DAPI image.']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
    Hidden:1
    Hidden:1
    Hidden:1
    Select an image to measure:Adjusted_Image
    Select objects to measure:Cells
    Texture scale to measure:3
    Angles to measure:Horizontal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

ClassifyObjects:[module_num:11|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notes:['Classify the nuclei on the basis of area. Divide the areas into 3 bins and give each bin a name.']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
    Make each classification decision on how many measurements?:Pair of measurements
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:350
    Use a bin for objects below the threshold?:No
    Upper threshold:700
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:Yes
    Enter the bin names separated by commas:Small,Medium,Large
    Retain an image of the classified objects?:No
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    Select the object name:Cells
    Select the first measurement:AreaShape_MeanRadius
    Method to select the cutoff:Median
    Enter the cutoff value:.5
    Select the second measurement:Intensity_MeanIntensity_Adjusted_Image
    Method to select the cutoff:Mean
    Enter the cutoff value:.5
    Use custom names for the bins?:Yes
    Enter the low-low bin name:Small_Faint
    Enter the low-high bin name:Small_Bright
    Enter the high-low bin name:Big_Faint
    Enter the high-high bin name:Big_Bright
    Retain an image of the classified objects?:Yes
    Enter the image name:ClassifiedCells

SaveImages:[module_num:12|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notes:['Save the color image as an 8-bit TIF, appending the text RBG to the original filename of the DAPI image.']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:ClassifiedCells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:PilotHaliteSlides
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.classified
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Objects
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    Select the objects to save:Cells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:PilotHaliteSlides
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.identified
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:hsv
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Adjusted_Image
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    Select method for constructing file names:From image filename
    Select image name for file prefix:PilotHaliteSlides
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.adjusted
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Select colormap:hsv
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:PilotHaliteSlides
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    Select method for constructing file names:From image filename
    Select image name for file prefix:PilotHaliteSlides
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:.original
    Saved file format:tiff
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:hsv
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:16|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
